PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = working memory
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Routines
  Routine feedback
    TextComponent text_2
      font = Calibri
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!


        Para salir, pulsa "space"
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine trial_2
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor [set every repeat] = $Color1
      lineWidth = 0.005
      pos = (0, -0.35)
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor [set every repeat] = $Color2
      lineWidth = 0.005
      ori = 90
      pos = (0, 0.35)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = $Color3
      nVertices = 0
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Instructions_2
    TextComponent text_3
      durationEstim = 10
      font = Calibri
      letterHeight = 0.025
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenido!

        En este test de working memory tendrás que
        memorizar la posición de los diferentes colores.


        El número de itema a recordar irá variando!


        Pulsa "space"para continuar
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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Flow
  Routine Instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Trials_.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Img1', 'QD_f.png'), ('Img2', 'JD_f.png')]),
      OrderedDict([('Img1', 'KC_f.png'), ('Img2', '8C.png')]),
      OrderedDict([('Img1', 'KC_f.png'), ('Img2', 'QD_f.png')]),
      OrderedDict([('Img1', 'KH.png'), ('Img2', 'KD.png')]),
      OrderedDict([('Img1', 'JH_f.png'), ('Img2', 'AH.png')]),
      OrderedDict([('Img1', 'JC.png'), ('Img2', '5C.png')]),
      OrderedDict([('Img1', 'KC_f.png'), ('Img2', '5D.png')]),
      OrderedDict([('Img1', 'JD.png'), ('Img2', 'JH.png')]),
      OrderedDict([('Img1', 'QS.png'), ('Img2', 'JH.png')]),
      OrderedDict([('Img1', 'KS_f.png'), ('Img2', '10S.png')]),
      OrderedDict([('Img1', 'QH.png'), ('Img2', '10H.png')]),
      OrderedDict([('Img1', 'KD.png'), ('Img2', '8S.png')]),
      OrderedDict([('Img1', 'QS.png'), ('Img2', 'JS.png')]),
      OrderedDict([('Img1', 'JH.png'), ('Img2', '8S.png')]),
      OrderedDict([('Img1', 'QS.png'), ('Img2', 'QC.png')]),
      OrderedDict([('Img1', 'KD.png'), ('Img2', 'JD.png')]),
      OrderedDict([('Img1', 'KC_f.png'), ('Img2', 'AC.png')]),
      OrderedDict([('Img1', 'JD_f.png'), ('Img2', '4D.png')]),
      OrderedDict([('Img1', 'QH_f.png'), ('Img2', 'AH.png')]),
      OrderedDict([('Img1', 'KD.png'), ('Img2', '9D.png')]),
      OrderedDict([('Img1', 'KH_f.png'), ('Img2', 'QH_f.png')]),
      OrderedDict([('Img1', 'QD_f.png'), ('Img2', '4C.png')]),
      OrderedDict([('Img1', 'QC.png'), ('Img2', '5S.png')]),
      OrderedDict([('Img1', 'JC.png'), ('Img2', '9H.png')]),
      OrderedDict([('Img1', 'KS_f.png'), ('Img2', 'KC_f.png')]),
      OrderedDict([('Img1', 'KS.png'), ('Img2', 'QS.png')]),
      OrderedDict([('Img1', 'QH_f.png'), ('Img2', '9D.png')])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
    Routine trial_2
  LoopTerminator trials
  Routine feedback
